PsychoPy2experiment version="1.83.04"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'', u'participant': u''}
  expName = DRL_task
  Units = use prefs
  Screen = 1
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Routines
  Routine break_time
    CodeComponent break_code
      Each Frame:
        if globalClock.getTime() - break_starttime < break_duration:
            break_instructions = "Please take a short break."
        else:
            break_instructions = "Press any key when ready"
      Begin Routine:
        break_starttime = globalClock.getTime()
      End Routine:
        if globalClock.getTime() - experiment_starttime >= session_duration:
            experiment.finished = True
        else:
            trial_starttime = globalClock.getTime()
    TextComponent break_txt
      text [set every frame] = $break_instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent break_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine DRL_task
    CodeComponent feedback_code
      Begin Experiment:
        score = 0
        block_number = 0
      Each Frame:
        if len(response.keys) > response_number:
            if response_number == 0:
                rt = response.rt[response_number]
            else:
                rt = response.rt[response_number] - response.rt[response_number-1]
            if rt >= interval:
                score += reward
                fixation_color = "green"
            else:
                score -= cost
                fixation_color = "red"
            response_number += 1
            thisExp.addData("rt", rt)
            thisExp.addData("score", score)
            thisExp.addData("response_number", response_number)
            thisExp.addData("block_number", block_number)
            thisExp.addData("time", globalClock.getTime())
            thisExp.addData("interval", interval)
            thisExp.nextEntry()

        else:
            fixation_color = "white"


        if globalClock.getTime() - trial_starttime >= task_duration:
            continueRoutine = False
      Begin Routine:
        response_number = 0
        block_number += 1
        trial_starttime = globalClock.getTime()
    KeyboardComponent response
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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    TextComponent fixation_txt
      color [set every frame] = $fixation_color
      text = +
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent feedback_tx
      color [set every frame] = $fixation_color
      pos = [0, .5]
      text [set every frame] = $score
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Instructions
    CodeComponent setup_code
      Begin Experiment:
        import pandas as pd

        session_info = pd.read_csv("DRL_session_information.csv")
        interval = session_info.Interval
        reward = session_info.Reward
        cost = session_info.Cost
        if interval.shape[0] == 1:
            interval = interval[0]
            reward = reward[0]
            cost = cost[0]

        session_duration = 60*60 * session_info.Session_duration[0]
        break_duration = 60 *session_info.Break_duration[0]
        task_duration = 60 * session_info.Task_duration[0]
      Begin Routine:
        experiment_starttime = globalClock.getTime()
    TextComponent instructions_text
      text = Yo, here's the expt.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instructions_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Closing
    TextComponent closing_txt
      text = G'bye
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent closing_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator experiment loopType="TrialHandler"
    loopType = random
    nReps = 100000
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    Routine DRL_task
    Routine break_time
  LoopTerminator experiment
  Routine Closing
