PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = Peak_procedure
  Units = use prefs
  Screen = 1
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Routines
  Routine Fixed_Interval
    CodeComponent fixed_code
      End Routine:
        total_score += score
      Each Frame:
        if len(fixed_response.rt) > nresponses:
            trial_responsetimes[nresponses] = fixed_response.rt[-1]
            if fixed_response.rt[-1] >= fi_interval:
                score += reward
                continueRoutine = False
            else:
                score -= cost_per_response
                nresponses += 1
    TextComponent fixed_fixation
      text = +
      durationEstim = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent fixed_response
      durationEstim = 3
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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  Routine feedback
    CodeComponent code
      Begin Routine:
        score_txt = ("Your trial score is {}. \n"
                     "Your total score is {}".format(score, total_score)
                    )
      End Routine:
        # output
        trial_responsetimes = trial_responsetimes[~np.isnan(trial_responsetimes)]

        for t in trial_responsetimes:
            # put in all the other info we want for a trial, too.
            thisExp.addData("trial_number", trial_number)
            thisExp.addData("is_fi_trial", isFixedTrial)
            thisExp.addData("is_pi_trial", isPeakTrial)
            thisExp.addData("response_time", t)
            thisExp.addData("score", score)
            thisExp.addData("total_score", total_score)
            thisExp.addData("reward", reward)
            thisExp.addData("cost", cost_per_response)
            thisExp.nextEntry()
    TextComponent feedback_score
      text [set every repeat] = $score_txt
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ITI
    StaticComponent ISI
      stopVal [duration (s)] = $iti_duration
      startVal [time (s)] = 0.0
    StaticComponent ITI_isi
      stopVal [duration (s)] = 0.5
      durationEstim = 1
      startVal [time (s)] = 0.0
    CodeComponent iti_code
      Begin Experiment:
        trial_number = 0
        total_score = 0
      Begin Routine:
        iti_duration = 0.5 + np.random.rand()

        session_timeelapsed = globalClock.getTime() - session_starttime
        if session_timeelapsed >= session_duration:
            trials.finished = True
        else:
            task_timeelapsed = globalClock.getTime() - last_breaktime
            # Need to account for some jitter in elapsed time
            isBreakTrial = 0 <= (task_timeelapsed % task_duration) < 30
            isBreakTrial = 0 #DEBUG
            if isBreakTrial:
                isFixedTrial = 0
                isPeakTrial = 0
            else:
                p_fitrial = 1.0 if trial_number <= 20 else 0.5
                isFixedTrial = 1 if random()<=p_fitrial else 0
                isPeakTrial = not isFixedTrial

                trial_number += 1
                score = 0

                nresponses = 0
                trial_responsetimes = np.nan + np.empty(1000) # time

            isFeedbackTrial = isFixedTrial or isPeakTrial
  Routine Peak_Interval
    CodeComponent peak_code
      End Routine:
        total_score += score
      Each Frame:
        if len(peak_response.rt) > nresponses:
            trial_responsetimes[nresponses] = peak_response.rt[-1]
            score -= cost_per_response
            nresponses += 1
        if t >= pi_interval:
            continueRoutine = False
    TextComponent peak_fixation
      text = +
      stopVal [duration (s)] = $pi_interval
      durationEstim = 9
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent peak_response
      stopVal [duration (s)] = $pi_interval
      durationEstim = 9
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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  Routine break_time
    CodeComponent break_code
      Begin Experiment:
        break_starttime = 0
        break_txt = "You may take a short break now."
      Each Frame:
        if globalClock.getTime() - break_starttime >= break_duration:
            break_txt = "Press any key to continue"
    TextComponent break_text
      text [set every frame] = $break_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent break_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Closing
  Routine Instructions
    CodeComponent setup_code
      Begin Experiment:
        import pandas as pd

        session_info = pd.read_csv("Peak_session_information.csv")
        fi_interval = session_info.Fixed_Interval
        pi_interval = session_info.Peak_Interval

        reward = session_info.Reward
        cost_per_response = session_info.Cost

        if fi_interval.shape[0] == 1:
            fi_interval = fi_interval[0]
            reward = reward[0]
            cost_per_response = cost_per_response[0]
            pi_interval = pi_interval[0]

        session_duration = 60*60 * session_info.Session_duration[0]
        break_duration = 60 *session_info.Break_duration[0]
        task_duration = 60 * session_info.Task_duration[0]
      End Routine:
        session_starttime = globalClock.getTime()
        last_breaktime = globalClock.getTime()
    TextComponent instructions_txt
      text = Here be the task
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instructions_key
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100000
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    Routine ITI
    LoopInitiator Fixed_Interval_Loop loopType="TrialHandler"
      loopType = random
      nReps = isFixedTrial
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      Routine Fixed_Interval
    LoopTerminator Fixed_Interval_Loop
    LoopInitiator Peak_Interval_Loop loopType="TrialHandler"
      loopType = random
      nReps = isPeakTrial
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      Routine Peak_Interval
    LoopTerminator Peak_Interval_Loop
    LoopInitiator feedback_Loop loopType="TrialHandler"
      loopType = random
      nReps = isFeedbackTrial
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      Routine feedback
    LoopTerminator feedback_Loop
    LoopInitiator Break_Loop loopType="TrialHandler"
      loopType = random
      nReps = isBreakTrial
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      Routine break_time
    LoopTerminator Break_Loop
  LoopTerminator trials
  Routine Closing
