PsychoPy2experiment version="2020.2.5"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  color = $[0, 0, 0]
  expName = switch_task
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        score = 0

        block_number = 1
        trial_number = 0

        backgroundColor = [0, 0, 0] # mirrors the background, doesn't set it.
        responseColor = [0, 1, 0] # sets the response color
      Begin Routine:
        left_img = {"opacity": 0, "line": backgroundColor, "fill": backgroundColor}
        right_img = {"opacity": 0, "line": backgroundColor, "fill": backgroundColor}

        ISI_duration = 0.5 + random()
        trial_duration = short if random()<=p_short else long
        trial_and_ISI_duration = ISI_duration + trial_duration

        correct = False
        nresponses = 0
        lastn_responses = 0
        last_response = ""

        trial_number += 1
        trial_starttime = globalClock.getTime()
      Each Frame:
        # Modified 11.03.2020 to be faster
        #   (only do work if we need to)
        nresponses = len(response.keys)
        if nresponses > lastn_responses:
            last_nresponses = nresponses
            if last_response != response.keys[-1]:
                last_response = response.keys[-1]

                left_img["line"] = backgroundColor
                right_img["line"] = backgroundColor

                if last_response == "left":
                    left_img["line"] = responseColor
                elif last_response == "right":
                    right_img["line"] = responseColor

        # they have to make a long response so we get
        # the entire distribution
        if t >= trial_and_ISI_duration:
            continueRoutine = False

        debugtxt = trial_duration
      End Routine:
        if nresponses > 0:
            if trial_duration == short and last_response == "left":
                score += v_short
                correct = True
            elif trial_duration == long and last_response == "right":
                score += v_long
                correct = True
            elif trial_duration == short and last_response == "right":
                score -= c_short
                correct = False
            elif trial_duration == long and last_response == "left":
                score -= c_long
                correct = False
        else:
            last_response = ""
            response.keys = [np.nan]
            response.rt = [np.nan]
            correct = False

        # Record all key presses
        for key, rt in zip(response.keys, response.rt):
            thisExp.addData("response", key)
            thisExp.addData("response_time", rt)
            thisExp.addData("ISI", ISI_duration)
            thisExp.addData("interval", trial_duration)
            thisExp.addData("time", trial_starttime)
            thisExp.addData("block_number", block_number)
            thisExp.addData("trial_number", trial_number) # auto-record is 0-based, I want 1-based
            thisExp.addData("score", score)
            thisExp.addData("correct", correct)
            thisExp.addData("p_short", p_short)
            thisExp.addData("v_short", v_short)
            thisExp.addData("c_short", c_short)
            thisExp.addData("v_long", v_long)
            thisExp.addData("c_long", c_long)
            thisExp.nextEntry()
    TextComponent trial_fixation
      durationEstim = 3
      letterHeight = 0.1
      startEstim = 1
      startVal [time (s)] = ISI_duration
      text = +
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    KeyboardComponent response
      allowedKeys = 'left', 'right'
      forceEndRoutine = False
      startEstim = 1
      startVal [time (s)] = ISI_duration
      store = all keys
      syncScreenRefresh = False
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    PolygonComponent trial_leftShape
      durationEstim = 3
      fillColor [set every repeat] = $left_img["fill"]
      lineColor [set every frame] = $left_img["line"]
      lineWidth = 3
      pos = [-0.5, 0]
      shape = rectangle
      size = [0.5, 0.5]
      startEstim = 1
      startVal [time (s)] = ISI_duration
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    PolygonComponent trial_rightShape
      durationEstim = 3
      fillColor [set every repeat] = $right_img["fill"]
      lineColor [set every frame] = $right_img["line"]
      lineWidth = 3
      pos = [0.5, 0]
      shape = rectangle
      size = [0.5, 0.5]
      startEstim = 1
      startVal [time (s)] = ISI_duration
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    TextComponent trial_score
      durationEstim = 3
      letterHeight = 0.1
      pos = [0, .75]
      startEstim = 1
      startVal [time (s)] = ISI_duration
      text [set every repeat] = $score
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    StaticComponent ISI_
      durationEstim = 1
      startVal [time (s)] = 0
      stopVal [duration (s)] = ISI_duration
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    TextComponent debug_txt
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = ISI_duration
      text [set every frame] = $debugtxt
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  Routine Closing
    TextComponent Closing_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Later, Gator.
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    KeyboardComponent Closing_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Instructions
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        df = pd.read_csv("Switch_session_information.csv")

        session_duration = 60 * df.Session_duration[0]
        break_duration = 60 * df.Break_duration[0]
        task_duration = 60 * df.Task_duration[0]

        short = df.short_interval[0]
        long = df.long_interval[0]

        p_short = df.p_short[0]
        v_short = df.v_short[0]
        v_long = df.v_long[0]
        c_short = df.c_short[0]
        c_long = df.c_long[0]

        del df
      End Routine:
        session_starttime = globalClock.getTime()
        task_starttime = globalClock.getTime()
    TextComponent instructions_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Here be instructions, arrr.
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    KeyboardComponent instructions_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        # TODO(David): Fix the bug where the line and fill aren't separate...
        #   for now, just disable the line
        # Short side...
        if trial_duration == short and correct == True:
            left_img = {"opacity": 1, "line": "green", "fill": "green"}
            right_img = {"opacity": 0, "line": backgroundColor, "fill": backgroundColor}

        elif trial_duration == short and correct == False:
            left_img = {"opacity": 1, "line": backgroundColor, "fill": "red"}
            right_img = {"opacity": 0, "line": "green", "fill": backgroundColor}
        # Long side...
        elif trial_duration == long and correct == True:
            left_img = {"opacity": 0, "line": backgroundColor, "fill": backgroundColor}
            right_img = {"opacity": 1, "line": "green", "fill": "green"}

        elif trial_duration == long and correct == False:
            left_img = {"opacity": 0, "line": "green", "fill": backgroundColor}
            right_img = {"opacity": 1, "line": backgroundColor, "fill": "red"}

        debugtxt = [left_img["fill"], right_img["fill"]]
      End Routine:
        if (globalClock.getTime() - task_starttime) >= task_duration:
            trials.finished = True
    PolygonComponent feedback_leftShape
      fillColor [set every frame] = $left_img["fill"]
      lineColor [set every frame] = $left_img["line"]
      lineWidth = 3
      opacity [set every frame] = $left_img["opacity"]
      pos = [-0.5, 0]
      shape = rectangle
      size = [0.5, 0.5]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent feedback_rightShape
      fillColor [set every frame] = $right_img["fill"]
      lineColor [set every frame] = $right_img["line"]
      lineWidth = 3
      opacity [set every frame] = $right_img["opacity"]
      pos = [0.5, 0]
      shape = rectangle
      size = [0.5, 0.5]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent debug_txt2
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $debugtxt
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  Routine break_time
    CodeComponent break_code
      Code Type = Auto->JS
      Begin Routine:
        breaktxt = "Break time, yo"
      Each Frame:
        if t >= break_duration:
            breaktxt = "Press any key to continue"
      End Routine:
        if globalClock.getTime() - session_starttime >= session_duration:
            task_segments.finished = True
        else:
            task_starttime = globalClock.getTime()
    TextComponent break_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $breaktxt
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    KeyboardComponent break_response
      forceEndRoutine = True
      startVal [time (s)] = break_duration
      syncScreenRefresh = False
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Flow
  Routine Instructions
  LoopInitiator task_segments loopType="TrialHandler"
    loopType = random
    nReps = 10000
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 10000
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      Routine trial
      Routine feedback
    LoopTerminator trials
    Routine break_time
  LoopTerminator task_segments
  Routine Closing
