PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[0, 0, 0]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = switch_task
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent trial_code
      Begin Experiment:
        score = 0

        block_number = 1
        trial_number = 0

        backgroundColor = [0, 0, 0] # mirrors the background, doesn't set it.
        responseColor = [0, 1, 0] # sets the response color
      Begin Routine:
        left_img = {"line": backgroundColor,
                    "fill": backgroundColor}
        right_img = {"line": backgroundColor,
                    "fill": backgroundColor}

        ISI_duration = 0.5 + random()
        trial_duration = short if random()<=p_short else long
        trial_and_ISI_duration = ISI_duration + trial_duration

        nresponses = 0
        trial_number += 1
        trial_starttime = globalClock.getTime()
        last_response = ""
      End Routine:
        if response.keys:
            if trial_duration == short and last_response == "left":
                score += v_short
                correct = True
            elif trial_duration == long and last_response == "right":
                score += v_long
                correct = True
            elif trial_duration == short and last_response == "right":
                score -= c_short
                correct = False
            elif trial_duration == long and last_response == "left":
                score -= c_long
                correct = True
        else:
            last_response = ""
            response.keys = [np.nan]
            response.rt = [np.nan]
            correct = False

        # Record all key presses
        for key, rt in zip(response.keys, response.rt):
            thisExp.addData("response", key)
            thisExp.addData("response_time", rt)
            thisExp.addData("ISI", ISI_duration)
            thisExp.addData("interval", trial_duration)
            thisExp.addData("time", trial_starttime)
            thisExp.addData("block_number", block_number)
            thisExp.addData("trial_number", trial_number) # auto-record is 0-based, I want 1-based
            thisExp.addData("score", score)
            thisExp.addData("correct", correct)
            thisExp.addData("p_short", p_short)
            thisExp.addData("v_short", v_short)
            thisExp.addData("c_short", c_short)
            thisExp.addData("v_long", v_long)
            thisExp.addData("c_long", c_long)
            thisExp.nextEntry()
      Each Frame:
        debugtext = [trial_duration, score]

        left_img["line"] = backgroundColor
        right_img["line"] = backgroundColor

        if response.keys:
            last_response = response.keys[-1]
            if last_response == "left":
                left_img["line"] = responseColor
            elif last_response == "right":
                right_img["line"] = responseColor

        # they have to make a long response so we get
        # the entire distribution
        if t >= trial_and_ISI_duration:
            continueRoutine = False
    TextComponent trial_fixation
      text = +
      durationEstim = 3
      startEstim = 1
      startVal [time (s)] = ISI_duration
      letterHeight = 0.1
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    KeyboardComponent response
      forceEndRoutine = False
      startEstim = 1
      allowedKeys = 'left', 'right'
      startVal [time (s)] = ISI_duration
      store = all keys
      syncScreenRefresh = False
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    PolygonComponent trial_leftShape
      fillColor [set every repeat] = $left_img["fill"]
      durationEstim = 3
      pos = [-0.5, 0]
      lineWidth = 3
      startEstim = 1
      lineColor [set every frame] = $left_img["line"]
      startVal [time (s)] = ISI_duration
      size = [0.5, 0.5]
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    PolygonComponent trial_rightShape
      fillColor [set every repeat] = $right_img["fill"]
      durationEstim = 3
      pos = [0.5, 0]
      lineWidth = 3
      startEstim = 1
      lineColor [set every frame] = $right_img["line"]
      startVal [time (s)] = ISI_duration
      size = [0.5, 0.5]
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    TextComponent trial_debugtxt
      text [set every repeat] = $score
      durationEstim = 3
      pos = [0, .75]
      startEstim = 1
      startVal [time (s)] = ISI_duration
      letterHeight = 0.1
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    StaticComponent ISI_
      stopVal [duration (s)] = ISI_duration
      durationEstim = 1
      startVal [time (s)] = 0
  Routine Closing
    TextComponent Closing_txt
      text = Later, Gator.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent Closing_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Instructions
    CodeComponent setup_code
      Begin Experiment:
        import pandas as pd

        df = pd.read_csv("Switch_session_information.csv")

        session_duration = 60 * 60 * df.Session_duration[0]
        break_duration = 60 * df.Break_duration[0]
        task_duration = 60 * df.Task_duration[0]

        short = df.short_interval[0]
        long = df.long_interval[0]

        p_short = df.p_short[0]
        v_short = df.v_short[0]
        v_long = df.v_long[0]
        c_short = df.c_short[0]
        c_long = df.c_long[0]

        del df
      End Routine:
        session_starttime = globalClock.getTime()
        task_starttime = globalClock.getTime()
    TextComponent instructions_txt
      text = Here be instructions, arrr.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instructions_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine feedback
    CodeComponent feedback_code
      Begin Routine:
        left_img = {"line": backgroundColor,
                    "fill": backgroundColor}
        right_img = {"line": backgroundColor,
                    "fill": backgroundColor}

        left_img["line"] = responseColor if last_response ==" left" else backgroundColor
        right_img["line"] = responseColor if last_response == "right" else backgroundColor

        if trial_duration == short:
            left_img["fill"] = "green" if correct else "red"
        elif trial_duration == long:
            right_img["fill"] = "green" if correct else "red"
      End Routine:
        if (globalClock.getTime() - task_starttime) >= task_duration:
            trials.finished = True
    PolygonComponent feedback_leftShape
      fillColor [set every repeat] = $left_img["fill"]
      stopVal [duration (s)] = 1
      pos = [-0.5, 0]
      lineWidth = 3
      lineColor [set every repeat] = $left_img["line"]
      startVal [time (s)] = 0
      size = [0.5, 0.5]
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    PolygonComponent feedback_rightShape
      fillColor [set every repeat] = $right_img["fill"]
      stopVal [duration (s)] = 1
      pos = [0.5, 0]
      lineWidth = 3
      lineColor [set every repeat] = $right_img["line"]
      startVal [time (s)] = 0
      size = [0.5, 0.5]
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  Routine break_2
    CodeComponent break_code
      Begin Routine:
        breaktxt = "Break time, yo"
      End Routine:
        if globalClock.getTime() - session_starttime >= session_duration:
            task_segments.finished = True
        else:
            task_starttime = globalClock.getTime()
      Each Frame:
        if t >= break_duration:
            breaktxt = "Press any key to continue"
    TextComponent break_txt
      text [set every frame] = $breaktxt
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent break_response
      forceEndRoutine = True
      startVal [time (s)] = break_duration
      syncScreenRefresh = False
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Flow
  Routine Instructions
  LoopInitiator task_segments loopType="TrialHandler"
    loopType = random
    nReps = 10000
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 100000
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      Routine trial
      Routine feedback
    LoopTerminator trials
    Routine break_2
  LoopTerminator task_segments
  Routine Closing
